<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:AindBehaviorDeviceOlfactometerDataSchema;assembly=Extensions"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:p3="clr-namespace:;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:Defer">
        <Name>CalibrationLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpOlfactometer</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpOlfactometerExtension</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value.Calibration.ChannelConfig</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsOdorChannel</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value.ChannelType</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="p1:OlfactometerChannelType">
                      <Value>Odor</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Index,Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToList" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ChannelsToCalibrate</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChannelsToCalibrate</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>ToggleEndValves</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>thisOdor</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisOdor</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentOdorBeingCalibrated</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OdorEndValveState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisOdor</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:CreateSoftwareEvent">
                      <p2:EventName>OdorChannel</p2:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:CreateSoftwareEvent">
                      <p2:EventName>IsEndValveCalibration</p2:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ArmOdor</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisOdor</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>olfactometerChannelCount</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OlfactometerChannelsCount" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:CreateOneHotConcentrationArray">
                            <p3:OlfactometerChannelsCount>12</p3:OlfactometerChannelsCount>
                            <p3:Concentration>1</p3:Concentration>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TaskLogicParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>FullFlowRate</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="TotalFlow" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>olfactometerChannelCount</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OlfactometerChannelCount" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisOdor</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.FlowRate</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="PerOdorFlow" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:CreateHubOdorMixture">
                            <p3:PerOdorFlow>100</p3:PerOdorFlow>
                            <p3:TotalFlow>1000</p3:TotalFlow>
                            <p3:OlfactometerChannelCount>3</p3:OlfactometerChannelCount>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SetOdorMix</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="12" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="12" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="12" Label="Source3" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source4" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeOff</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TimeSpanFromSeconds" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>OdorEndValveState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeOn</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TimeSpanFromSeconds" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>OdorEndValveState</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>NRepeatsPerStimulus</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>10</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DelaySubscription">
                      <rx:DueTime>PT5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="25" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="31" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source2" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChannelsToCalibrate</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>OpenEndValves</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>thisOdor</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisOdor</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>CurrentOdorBeingCalibrated</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>thisOdor</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:CreateSoftwareEvent">
                      <p2:EventName>OdorChannel</p2:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:CreateSoftwareEvent">
                      <p2:EventName>IsEndValveCalibration</p2:EventName>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>SoftwareEvent</Name>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>TurnOffOdors</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>ArmOdor</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisOdor</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>olfactometerChannelCount</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OlfactometerChannelsCount" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:CreateOneHotConcentrationArray">
                            <p3:OlfactometerChannelsCount>12</p3:OlfactometerChannelsCount>
                            <p3:Concentration>0</p3:Concentration>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TaskLogicParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>FullFlowRate</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="TotalFlow" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>olfactometerChannelCount</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OlfactometerChannelCount" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisOdor</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.FlowRate</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="PerOdorFlow" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:CreateHubOdorMixture">
                            <p3:PerOdorFlow>100</p3:PerOdorFlow>
                            <p3:TotalFlow>1000</p3:TotalFlow>
                            <p3:OlfactometerChannelCount>3</p3:OlfactometerChannelCount>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SetOdorMix</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Delay">
                            <rx:DueTime>PT0.03S</rx:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>OdorEndValveState</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="12" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="12" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="12" Label="Source3" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source4" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeOff</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TimeSpanFromSeconds" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>OpenOdor</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisOdor</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>olfactometerChannelCount</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OlfactometerChannelsCount" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:CreateOneHotConcentrationArray">
                            <p3:OlfactometerChannelsCount>12</p3:OlfactometerChannelsCount>
                            <p3:Concentration>1</p3:Concentration>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TaskLogicParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>FullFlowRate</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="TotalFlow" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>olfactometerChannelCount</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OlfactometerChannelCount" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisOdor</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.FlowRate</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="PerOdorFlow" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:CreateHubOdorMixture">
                            <p3:PerOdorFlow>100</p3:PerOdorFlow>
                            <p3:TotalFlow>1000</p3:TotalFlow>
                            <p3:OlfactometerChannelCount>3</p3:OlfactometerChannelCount>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SetOdorMix</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="12" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="12" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="12" Label="Source3" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source4" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TimeOn</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:TimeSpanFromSeconds" />
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:SelectMany">
                    <Name>CloseOdor</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisOdor</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>olfactometerChannelCount</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OlfactometerChannelsCount" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:CreateOneHotConcentrationArray">
                            <p3:OlfactometerChannelsCount>12</p3:OlfactometerChannelsCount>
                            <p3:Concentration>0</p3:Concentration>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>TaskLogicParameters</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>FullFlowRate</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="TotalFlow" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>olfactometerChannelCount</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="OlfactometerChannelCount" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>thisOdor</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2.FlowRate</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="PerOdorFlow" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p3:CreateHubOdorMixture">
                            <p3:PerOdorFlow>100</p3:PerOdorFlow>
                            <p3:TotalFlow>1000</p3:TotalFlow>
                            <p3:OlfactometerChannelCount>3</p3:OlfactometerChannelCount>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>SetOdorMix</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source2" />
                        <Edge From="3" To="12" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="6" Label="Source1" />
                        <Edge From="6" To="12" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="12" Label="Source3" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source4" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TaskLogicParameters</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>NRepeatsPerStimulus</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:RepeatCount">
                      <rx:Count>10</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:DelaySubscription">
                      <rx:DueTime>PT5S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="23" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="28" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:LastOrDefault" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="6" To="11" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="21" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>