<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:AllenNeuralDynamics.WhiteRabbit;assembly=AllenNeuralDynamics.WhiteRabbit"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.AlicatFlowmeter;assembly=AllenNeuralDynamics.AlicatFlowmeter"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpDevices</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Channel3AsCarrier</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpOlfactometer</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpOlfactometerExtension</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpOlfactometerExtensionManager.bonsai" />
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpAnalogInput</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpAnalogInputDevice.bonsai">
              <PortName>COM8</PortName>
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpClockGenerator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpWhiteRabbit.bonsai">
              <PortName>COMx</PortName>
              <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpWhiteRabbitEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedCounter" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>HarpTimestampSource</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpManipulator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Calibration</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>HarpManipulator</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\AindManipulator.bonsai">
              <PortName>COMx</PortName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="7" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="31" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Flowmeter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Flowmeter</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DeviceId" Selector="DeviceId" />
                <Property Name="PortName" Selector="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Flowmeter</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>PoolingPeriod</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:TimeSpanFromSeconds" />
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PoolingPeriod" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.AlicatFlowmeter:FlowmeterDevice.bonsai">
              <DeviceId>A</DeviceId>
              <BaudRate>19200</BaudRate>
              <PortName>COMX</PortName>
              <PoolingPeriod>PT0.2S</PoolingPeriod>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:Parse" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarpTimestampSource</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateTimestamped" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>AlicatFlowmeterEvents</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Flowmeter</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>