WorkflowBuilder(Version=2.8.5)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=Extensions\LoadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

IncludeWorkflow(Path=Extensions\DeserializeSchemas.bonsai)

GroupWorkflow UserInterface
    SubscribeSubject HarpAnalogInputEvents
    -> Harp.AnalogInput.Parse(Register=Harp.AnalogInput.TimestampedAnalogData)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      IndexSelector=Seconds
      ValueSelector=Value.Channel0
      SymbolType=None
      LineWidth=3
      CurveSettings(CurveConfiguration(Label=PID, Color=Black))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #3
    SubscribeSubject HarpOlfactometerEvents
    -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel0ActualFlow)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      IndexSelector=Seconds
      ValueSelector=Value
      SymbolType=None
      LineWidth=1
      CurveSettings(CurveConfiguration(Label=Channel0, Color=Blue))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #7
    SubscribeSubject HarpOlfactometerEvents
    -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel1ActualFlow)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      IndexSelector=Seconds
      ValueSelector=Value
      SymbolType=None
      LineWidth=1
      CurveSettings(CurveConfiguration(Label=Channel1, Color=Blue))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #11
    SubscribeSubject HarpOlfactometerEvents
    -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel2ActualFlow)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      IndexSelector=Seconds
      ValueSelector=Value
      SymbolType=None
      LineWidth=1
      CurveSettings(CurveConfiguration(Label=Channel2, Color=Blue))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #15
    SubscribeSubject HarpOlfactometerEvents
    -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel3ActualFlow)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      IndexSelector=Seconds
      ValueSelector=Value
      SymbolType=None
      LineWidth=1
      CurveSettings(CurveConfiguration(Label=Blank, Color=#C04000))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #19
    SubscribeSubject HarpOlfactometerEvents
    -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedChannel4ActualFlow)
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      IndexSelector=Seconds
      ValueSelector=Value
      SymbolType=None
      LineWidth=1
      CurveSettings(CurveConfiguration(Label=Carrier, Color=Gray))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #23
    SubscribeSubject HarpOlfactometerEvents
    -> Harp.Olfactometer.Parse(Register=Harp.Olfactometer.TimestampedEndValveState)
    -> Bonsai.Harp.ConvertTimestamped
        WorkflowInput Source1 => #0
        -> HasFlag(Operand=WorkflowProperty<Harp.Olfactometer.EndValves>(Value=EndValve0)) => #1
        ExternalizedMapping(Value(DisplayName=Gain)) => #2
        #0, #2 -> DoubleProperty(Value=1000) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 ? Item2 : 0
        -> WorkflowOutput
    -> Bonsai.Gui.ZedGraph.RollingGraphBuilder
      IndexSelector=Seconds
      ValueSelector=Value
      SymbolType=Circle
      LineWidth=0
      CurveSettings(CurveConfiguration(Label=EndValveState, Color=Orange))
      Capacity=nil
      Min=nil
      Max=nil
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphVisualizer>) => #28
    #3, #7, #11, #15, #19, #23, #28 -> Bonsai.Gui.ZedGraph.RollingGraphPanelBuilder(ReverseX=false, ReverseY=false, Span=nil, Capacity=nil, BaseAxis=X, BarType=Cluster, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ZedGraph.RollingGraphPanelVisualizer>) => #30
    SubscribeSubject SoftwareEvent
    -> VisualizerMapping(VisualizerType=TypeMapping<AllenNeuralDynamics.Core.Design.SoftwareEventVisualizer>) => #32
    BooleanProperty(Value=true)
    -> Take(Count=1) => #34
    SubscribeSubject StartExperimentTrigger
    -> BooleanProperty(Value=false)
    -> Take(Count=1) => #37
    #34, #37 -> Merge
    -> PropertyMapping(Enabled)
    -> Bonsai.Gui.ButtonBuilder(Enabled=false, Visible=true, Font="Microsoft Sans Serif, 16pt", Text=Start!)
    -> PublishSubject StartButton
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #42
    #32, #42 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=1
      ColumnStyles(ColumnStyle(SizeType=Percent, Width=0.8), ColumnStyle(SizeType=Percent, Width=0.2))
      RowStyles=""
      CellSpans=""
    -> VisualizerMapping => #44
    #30, #44 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder OlfactometerCalibration(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles(RowStyle(SizeType=Percent, Height=0.7), RowStyle(SizeType=Percent, Height=0.3)), CellSpans="")
    -> WorkflowOutput

    SubscribeSubject StartButton
    -> Take(Count=1)
    -> Unit
    -> MulticastSubject StartExperimentTrigger

GroupWorkflow HarpDevices
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=ChannelConfig)
    -> Index(Operand=StringProperty(Value=3))
    -> MemberSelector(Selector=ChannelType)
    -> Equal(Operand=WorkflowProperty<AindBehaviorDeviceOlfactometer.TaskLogic.OlfactometerChannelType>(Value=Carrier))
    -> BehaviorSubject Channel3AsCarrier

    SubscribeSubject Channel3AsCarrier
    -> PropertyMapping(Channel3AsCarrier) => #7
    SubscribeSubject RigSchema
    -> MemberSelector(Selector=HarpOlfactometer)
    -> MemberSelector(Selector=PortName)
    -> PropertyMapping(PortName) => #11
    #7, #11 -> IncludeWorkflow(Path=Extensions\HarpOlfactometerDevice.bonsai, PortName=COM10, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump, Channel3AsCarrier=true)

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=HarpAnalogInput)
    -> MemberSelector(Selector=PortName)
    -> PropertyMapping(PortName)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COM8, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=HarpClockGenerator)
    -> MemberSelector(Selector=PortName)
    -> PropertyMapping(PortName)
    -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTimestampGeneratorGen3Device.bonsai, PortName=COMx, TriggerHarpReadDumpSubjectName=TriggerHarpReadDump)

    SubscribeSubject HarpAnalogInputEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> Harp.AnalogInput.Parse(Register=Harp.AnalogInput.TimestampedAnalogData)
    -> MemberSelector(Selector=Seconds)
    -> BehaviorSubject HarpTimestampSource

IncludeWorkflow(Path=Extensions\HardwareValidation.bonsai) => #5
SubscribeSubject SessionSchema
-> MemberSelector(Selector=AllowDirtyRepo)
-> BitwiseNot
-> Condition => #9
    WorkflowInput Source1
    -> WorkflowOutput
#5, #9 -> SubscribeWhen

GroupWorkflow OdorControl
    GroupWorkflow EndValveControl
        SubscribeSubject HarpOlfactometerEvents
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> BehaviorSubject OdorEndValveState

        SubscribeSubject OdorEndValveState => #4
        -> Condition OdorPath
            WorkflowInput Source1
            -> WorkflowOutput
        -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=EndValve0) => #6
        #4 -> BitwiseNot
        -> Condition CarrierPath
            WorkflowInput Source1
            -> WorkflowOutput
        -> PropertySource<Harp.Olfactometer.CreateEndValvesStatePayload,Harp.Olfactometer.EndValves>(MemberName=EndValvesState, Value=None) => #9
        #6, #9 -> Merge
        -> Harp.Olfactometer.Format(MessageType=Write, Register=Harp.Olfactometer.EndValveState)
        -> MulticastSubject HarpOlfactometerCommands

    GroupWorkflow InitialState
        SubscribeSubject Channel3AsCarrier
        -> PropertyMapping(Channel3AsCarrier) => #1
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=FullFlowRate)
        -> PropertyMapping(TotalFlow) => #4
        #1, #4 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #5
          channel3AsCarrier=true
          PercentageChannel0=0
          PercentageChannel1=0
          PercentageChannel2=0
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=1000
        -> MemberSelector(Selector=ChannelsTargetFlow) => #6
        #5 -> MemberSelector(Selector=OdorValveState) => #7
        #6, #7 -> Merge
        -> MulticastSubject HarpOlfactometerCommands => #9
        SubscribeSubject HarpOlfactometerEvents => #10
        #9, #10 -> SubscribeWhen

GroupWorkflow Init
    SubscribeSubject SessionSchema
    -> PropertyMapping(RootFolder(Selector=RootPath), SessionName(Selector=SessionName))
    -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:GenerateRootLoggingPathFromSession.bonsai, RootFolder="", SessionName=nil, SubjectName=LoggingRootPath)

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvent

SubscribeSubject TaskLogicParameters
-> MemberSelector(Selector=ChannelConfig)
-> Merge
-> CreateObservable ToggleEndValves => #16
    WorkflowInput Source1
    -> MemberSelector(Selector=Key)
    -> Take(Count=1)
    -> AsyncSubject OdorChannel

    BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=ChannelConfig) => #7
    SubscribeSubject OdorChannel
    -> PropertyMapping(Value) => #9
    #7, #9 -> Index(Operand=StringProperty(Value=0))
    -> Take(Count=1)
    -> AsyncSubject ThisOdorChannel
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=OdorChannel)
    -> MulticastSubject SoftwareEvent
    -> BooleanProperty(Value=true)
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=IsEndValveCalibration)
    -> MulticastSubject SoftwareEvent

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=ChannelConfig) => #19
    SubscribeSubject OdorChannel
    -> PropertyMapping(Value) => #21
    #19, #21 -> Index(Operand=StringProperty(Value=0))
    -> Take(Count=1)
    -> AsyncSubject ThisOdorConfig
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=OdorConfig)
    -> MulticastSubject SoftwareEvent

    GroupWorkflow ArmOdor
        SubscribeSubject Channel3AsCarrier
        -> PropertyMapping(Channel3AsCarrier) => #1
        SubscribeSubject ThisOdorChannel
        -> MemberSelector(Selector=FlowRate)
        -> PropertyMapping(TargetOdorFlow) => #4
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=FullFlowRate)
        -> PropertyMapping(TotalFlow) => #7
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel0) => #11
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=1))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel1) => #15
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=2))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel2) => #19
        #1, #4, #7, #11, #15, #19 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #20
          channel3AsCarrier=true
          PercentageChannel0=1
          PercentageChannel1=0
          PercentageChannel2=0
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=1000
        -> MemberSelector(Selector=ChannelsTargetFlow) => #21
        #20 -> MemberSelector(Selector=OdorValveState) => #22
        #21, #22 -> Merge
        -> MulticastSubject HarpOlfactometerCommands
        -> WorkflowOutput

    GroupWorkflow IsCarrierChannel?
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=ChannelConfig) => #1
        SubscribeSubject OdorChannel
        -> PropertyMapping(Value) => #3
        #1, #3 -> Index(Operand=StringProperty(Value=0))
        -> MemberSelector(Selector=ChannelType)
        -> Condition IsCarrier
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<AindBehaviorDeviceOlfactometer.TaskLogic.OlfactometerChannelType>(Value=Carrier))
            -> WorkflowOutput
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #29
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TimeOff)
    -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT5S, Period=PT0S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject OdorEndValveState => #36
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TimeOn)
    -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
    -> PropertyMapping(DueTime) => #40
    #36, #40 -> Delay(DueTime=PT2S)
    -> BitwiseNot
    -> MulticastSubject OdorEndValveState => #43
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=NRepeatsPerStimulus)
    -> PropertyMapping(Count) => #46
    #43, #46 -> RepeatCount(Count=10)
    -> LastOrDefault
    -> BooleanProperty(Value=true) => #49
    #29, #49 -> Merge
    -> Take(Count=1)
    -> DelaySubscription(DueTime=PT5S)
    -> WorkflowOutput
SubscribeSubject TaskLogicParameters
-> MemberSelector(Selector=ChannelConfig)
-> Merge
-> CreateObservable OpenEndValves => #20
    WorkflowInput Source1
    -> MemberSelector(Selector=Key)
    -> Take(Count=1)
    -> AsyncSubject OdorChannel

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=ChannelConfig) => #5
    SubscribeSubject OdorChannel
    -> PropertyMapping(Value) => #7
    #5, #7 -> Index(Operand=StringProperty(Value=3))
    -> Take(Count=1)
    -> AsyncSubject ThisOdorChannel
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=OdorChannel)
    -> MulticastSubject SoftwareEvent
    -> BooleanProperty(Value=false)
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=IsEndValveCalibration)
    -> MulticastSubject SoftwareEvent

    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=ChannelConfig) => #17
    SubscribeSubject OdorChannel
    -> PropertyMapping(Value) => #19
    #17, #19 -> Index(Operand=StringProperty(Value=3))
    -> Take(Count=1)
    -> AsyncSubject ThisOdorConfig
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=OdorConfig)
    -> MulticastSubject SoftwareEvent

    Annotation TurnOffOdors(Text="")
    -> GroupWorkflow ArmOdor
        SubscribeSubject Channel3AsCarrier
        -> PropertyMapping(Channel3AsCarrier) => #1
        SubscribeSubject ThisOdorChannel
        -> MemberSelector(Selector=FlowRate)
        -> PropertyMapping(TargetOdorFlow) => #4
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=FullFlowRate)
        -> PropertyMapping(TotalFlow) => #7
        #1, #4, #7 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #8
          channel3AsCarrier=true
          PercentageChannel0=0
          PercentageChannel1=0
          PercentageChannel2=0
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=1000
        -> MemberSelector(Selector=ChannelsTargetFlow) => #9
        #8 -> MemberSelector(Selector=OdorValveState) => #10
        #9, #10 -> Merge
        -> MulticastSubject HarpOlfactometerCommands
        -> BooleanProperty(Value=true)
        -> MulticastSubject OdorEndValveState
        -> WorkflowOutput

    GroupWorkflow IsCarrierChannel?
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=ChannelConfig) => #1
        SubscribeSubject OdorChannel
        -> PropertyMapping(Value) => #3
        #1, #3 -> Index(Operand=StringProperty(Value=3))
        -> MemberSelector(Selector=ChannelType)
        -> Condition IsCarrier
            WorkflowInput Source1
            -> Equal(Operand=WorkflowProperty<AindBehaviorDeviceOlfactometer.TaskLogic.OlfactometerChannelType>(Value=Carrier))
            -> WorkflowOutput
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #28
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TimeOff)
    -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT5S, Period=PT0S)
    -> SelectMany OpenOdor => #34
        SubscribeSubject Channel3AsCarrier
        -> PropertyMapping(Channel3AsCarrier) => #1
        SubscribeSubject ThisOdorChannel
        -> MemberSelector(Selector=FlowRate)
        -> PropertyMapping(TargetOdorFlow) => #4
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=FullFlowRate)
        -> PropertyMapping(TotalFlow) => #7
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=0))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel0) => #11
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=1))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel1) => #15
        SubscribeSubject OdorChannel
        -> Equal(Operand=StringProperty(Value=2))
        -> Bonsai.Scripting.Expressions.ExpressionTransform "it ? 1.0 : 0.0"
          Expression: it ? 1.0 : 0.0
        -> PropertyMapping(PercentageChannel2) => #19
        #1, #4, #7, #11, #15, #19 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #20
          channel3AsCarrier=true
          PercentageChannel0=1
          PercentageChannel1=0
          PercentageChannel2=0
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=1000
        -> MemberSelector(Selector=ChannelsTargetFlow) => #21
        #20 -> MemberSelector(Selector=OdorValveState) => #22
        #21, #22 -> Merge
        -> MulticastSubject HarpOlfactometerCommands
        -> Last
        -> WorkflowOutput
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=TimeOn)
    -> AllenNeuralDynamics.Core.TimeSpanFromSeconds
    -> PropertyMapping(DueTime) => #38
    #34, #38 -> Delay(DueTime=PT2S)
    -> SelectMany CloseOdor => #40
        SubscribeSubject Channel3AsCarrier
        -> PropertyMapping(Channel3AsCarrier) => #1
        SubscribeSubject ThisOdorChannel
        -> MemberSelector(Selector=FlowRate)
        -> PropertyMapping(TargetOdorFlow) => #4
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=FullFlowRate)
        -> PropertyMapping(TotalFlow) => #7
        #1, #4, #7 -> AllenNeuralDynamics.HarpUtils.CreateOdorMix => #8
          channel3AsCarrier=true
          PercentageChannel0=0
          PercentageChannel1=0
          PercentageChannel2=0
          PercentageChannel3=NaN
          Channel3AsCarrier=true
          TargetOdorFlow=100
          TotalFlow=1000
        -> MemberSelector(Selector=ChannelsTargetFlow) => #9
        #8 -> MemberSelector(Selector=OdorValveState) => #10
        #9, #10 -> Merge
        -> MulticastSubject HarpOlfactometerCommands
        -> Last
        -> WorkflowOutput
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=NRepeatsPerStimulus)
    -> PropertyMapping(Count) => #43
    #40, #43 -> RepeatCount(Count=10)
    -> LastOrDefault
    -> BooleanProperty(Value=true) => #46
    #28, #46 -> Merge
    -> Take(Count=1)
    -> DelaySubscription(DueTime=PT5S)
    -> WorkflowOutput
#16, #20 -> Concat
-> Concat
-> LastOrDefault
-> Delay(DueTime=PT5S)
-> PublishSubject EndExperiment => #25
SubscribeSubject StartExperiment => #26
#25, #26 -> SubscribeWhen

Defer Logging => #28
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpOlfactometerEvents => #0
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #2
            #0, #2 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=Olfactometer
              HarpDeviceName=Olfactometer

            SubscribeSubject HarpAnalogInputEvents => #4
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #6
            #4, #6 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=AnalogInput, HarpDeviceName=AnalogInput)

            SubscribeSubject HarpClockGenEvents => #8
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #10
            #8, #10 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=ClockGenerator
              HarpDeviceName=TimestampGeneratorGen3

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpTimestampSource
            -> BehaviorSubject HarpSeconds

            SubscribeSubject HarpOlfactometerCommands => #2
            SubscribeSubject HarpSeconds => #3
            #2, #3 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=Write) => #5
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #7
            #5, #7 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/Olfactometer
              HarpDeviceName=Olfactometer

            SubscribeSubject HarpClockGenCommands => #9
            SubscribeSubject HarpSeconds => #10
            #9, #10 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=Write) => #12
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #14
            #12, #14 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/ClockGenerator
              HarpDeviceName=TimestampGeneratorGen3

            SubscribeSubject HarpAnalogInputCommands => #16
            SubscribeSubject HarpSeconds => #17
            #16, #17 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=Write) => #19
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #21
            #19, #21 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/AnalogInput
              HarpDeviceName=AnalogInput

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvent => #0
            SubscribeSubject HarpTimestampSource => #1
            #0, #1 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #4
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #6
            #4, #6 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=Behavior)
            -> WorkflowOutput

    Defer Other
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow ConfigSchemaLogging
            SubscribeSubject SessionSchema
            -> GroupWorkflow ModifySchema
                WorkflowInput Source1
                -> AindBehaviorDeviceOlfactometer.Session.SerializeToJson
                -> AindBehaviorDeviceOlfactometer.Session.DeserializeFromJson(Type=TypeMapping<AindBehaviorDeviceOlfactometer.Session.AindBehaviorSessionModel>) => #2
                SubscribeSubject Repository
                -> MemberSelector(Selector=Head.Tip.Sha) => #4
                #2, #4 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionSink AddHash
                  Expression: it.Item1.set_CommitHash(it.Item2)
                -> MemberSelector(Selector=Item1)
                -> Timestamp
                -> Bonsai.Scripting.Expressions.ExpressionSink AddTimestamp
                  Expression: it.Value.set_Date(it.Timestamp)
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            -> AindBehaviorDeviceOlfactometer.Session.SerializeToJson => #2
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #4
            #2, #4 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=session_output)

            SubscribeSubject TaskLogicSchema
            -> AindBehaviorDeviceOlfactometer.TaskLogic.SerializeToJson => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #9
            #7, #9 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=tasklogic_output)

            SubscribeSubject RigSchema
            -> AindBehaviorDeviceOlfactometer.Rig.SerializeToJson => #12
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #14
            #12, #14 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=rig_output)

            SubscribeSubject RawRigSchema => #16
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #18
            #16, #18 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Config, LogName=rig_input, Extension=json)

            SubscribeSubject RawSessionSchema => #20
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #22
            #20, #22 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogAllText.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=Config
              LogName=session_input
              Extension=json

            SubscribeSubject RawTaskLogicSchema => #24
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #26
            #24, #26 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogAllText.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=Config
              LogName=tasklogic_input
              Extension=json

        GroupWorkflow Logs
            SubscribeSubject EndExperiment
            -> StringProperty(Value=ExperimentCompleted)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=SoftwareEvent) => #2
            SubscribeSubject HarpTimestampSource => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
            -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #9
            #7, #9 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName="", LogName=endsession)
SubscribeSubject EndExperiment
-> Delay(DueTime=PT0S) => #30
#28, #30 -> TakeUntil => #31
SubscribeSubject StartLogging => #32
#31, #32 -> SubscribeWhen

BehaviorSubject<System.Reactive.Unit> StartExperimentTrigger
-> PublishSubject StartLogging
-> Delay(DueTime=PT1S)
-> PublishSubject TriggerHarpReadDump
-> PublishSubject StartExperiment

SubscribeSubject EndExperiment
-> Delay(DueTime=PT2S)
-> SelectMany EndRoutine
    AllenNeuralDynamics.HarpUtils.CreateOdorMix
      channel3AsCarrier=true
      PercentageChannel0=0
      PercentageChannel1=0
      PercentageChannel2=0
      PercentageChannel3=NaN
      Channel3AsCarrier=true
      TargetOdorFlow=100
      TotalFlow=1000
    -> Take(Count=1) => #1
    -> MemberSelector(Selector=ChannelsTargetFlow) => #2
    #1 -> MemberSelector(Selector=OdorValveState) => #3
    #2, #3 -> Merge
    -> MulticastSubject HarpOlfactometerCommands
    -> Last
    -> BooleanProperty(Value=false)
    -> MulticastSubject OdorEndValveState
    -> WorkflowOutput
-> Delay(DueTime=PT0S)
-> Take(Count=1)
-> WorkflowOutput
